PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      color [set every repeat] = $letterColor
      font = Comic Sans
      letterHeight = 0.05
      ori [set every repeat] = orientation
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Instruction
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Нажмите куда-то
        <- - красный
        -> - синий
        вниз - зеленый

        Чтобы продолжить, нажмите пробел
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .35
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stroop task.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'word': 'красный', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1, 'orientation': 0},
      {'word': 'красный', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0, 'orientation': 0},
      {'word': 'зеленый', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1, 'orientation': 0},
      {'word': 'зеленый', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0, 'orientation': 0},
      {'word': 'синий', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1, 'orientation': 0},
      {'word': 'синий', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0, 'orientation': 0},
      {'word': 'красный', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1, 'orientation': 180},
      {'word': 'красный', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0, 'orientation': 180},
      {'word': 'зеленый', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1, 'orientation': 180},
      {'word': 'зеленый', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0, 'orientation': 180},
      {'word': 'синий', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1, 'orientation': 180},
      {'word': 'синий', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0, 'orientation': 180}]
    Routine fixation
    Routine trial
  LoopTerminator trials
